PsychoPy2experiment version="1.79.01"
Settings
  Save csv file = True
  Monitor = testMonitor
  color = $[-1,-1,-1]
  Window size (pixels) = [1280, 800]
  Full-screen window = True
  Experiment info = {u'session': u'001', u'participant': u''}
  Save excel file = True
  expName = ior
  Units = deg
  Screen = 1
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Routines
  Routine block1Start
    TextComponent block1StartText
      wrapWidth = 1.5
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Právě jste dokončili první ostrý blok úloh.

        Až budete připraveni začít řešit druhý ostrý blok úloh, stiskněte mezerník.
    KeyboardComponent block1StartKey
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine trial
    CodeComponent init
      Begin Routine:
        targetStart = 0.5 + target_time / 1000

        targetPos = [0, 0]
        targetOpa = 0
        if (target_side == "none"):
            targetOpa = 0
        if (target_side == "central"):
            targetPos = [0, 0]
            targetOpa = 1
        if (target_side == "left"):
            targetPos = [-8, 0]
            targetOpa = 1
        if (target_side == "right"):
            targetPos = [8, 0]
            targetOpa = 1

        cuePos = [0, 0]
        if (cue_side == "left"):
            cuePos = [-8, 0]
        if (cue_side == "right"):
            cuePos = [8, 0]

        debugOpa = 0
        debugStr = ""
        debugStr += "targetStart: " + str(targetStart)
        debugStr += "\n"
        debugStr += "target_time: " + str(target_time)
        debugStr += "\n"
        debugStr += "target_side: " + target_side
        debugStr += "\n"
        debugStr += "cue_side: " + cue_side

        debugText.alignHoriz = "left"
        debugText.alignVert = "bottom"
    TextComponent debugText
      opacity [set every repeat] = debugOpa
      text [set every repeat] = $debugStr
      stopVal [duration (s)] = 2
      pos = [-1, -1]
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    StaticComponent ISI
      stopVal [duration (s)] = 0.5
      startVal [time (s)] = 0.0
    PolygonComponent frameMiddle
      startVal [time (s)] = 0
      size = [1, 1]
      fillColor = $[-1,-1,-1]
      units = deg
      stopVal [duration (s)] = 2
      lineColor = $[0,0,0]
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    PolygonComponent frameLeft
      pos = [-8, 0]
      startVal [time (s)] = 0.0
      size = [1, 1]
      fillColor = $[-1,-1,-1]
      units = deg
      stopVal [duration (s)] = 2
      lineColor = $[0,0,0]
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    PolygonComponent frameRight
      pos = [8, 0]
      startVal [time (s)] = 0.0
      size = [1, 1]
      fillColor = $[-1,-1,-1]
      units = deg
      stopVal [duration (s)] = 2
      lineColor = $[0,0,0]
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    PolygonComponent cue
      pos [set every repeat] = cuePos
      startVal [time (s)] = 0.5
      size = [1, 1]
      fillColor = $[-1,-1,-1]
      units = deg
      stopVal [duration (s)] = 0.150
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    PolygonComponent target
      pos [set every repeat] = targetPos
      startVal [time (s)] = $targetStart
      size = [0.1, 0.1]
      fillColor = $[1,1,1]
      units = deg
      opacity [set every repeat] = targetOpa
      stopVal [duration (s)] = 0.5
      startEstim = 0.550
      lineWidth = 0
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    KeyboardComponent trialKey
      stopVal [duration (s)] = 2
      forceEndRoutine = False
      allowedKeys = 'space'
      startVal [time (s)] = 0
      store = first key
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  Routine blockStart
    TextComponent blockStartText
      wrapWidth = 1.5
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Právě jste dokončili cvičnou sadu úloh.

        Až budete připraveni začít řešit první ostrý blok úloh, stiskněte mezerník.
    KeyboardComponent blockStartKey
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine experimentEnd
    TextComponent experimentEndText
      wrapWidth = 1.5
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Právě jste dokončili druhý ostrý blok úloh.

        Experiment je dokončen. Děkujeme za vaši spolupráci.
    KeyboardComponent experimentEndKey
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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  Routine instructions
    TextComponent instructionsText
      wrapWidth = 1.5
      units = norm
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        V následujícím experimentu se testuje váš postřeh. Experiment se skládá z krátkých úloh, které se budou v obměnách opakovat. V každé úloze uvidíte 3 čtverce, po celou dobu sledujte prostřední čtverec, nesnažte se hýbat očima. Čekejte, zda se objeví v některém čtverci malý bílý čtvereček a pokud ano, stiskněte co nejrychleji mezerník. Pokud ne, nedělejte nic a počkejte na další úlohu. Snažte se pracovat co nejrychleji, ale přesně (bez chyb).

        Až budete připraveni začít řešit cvičnou sadu úloh, stiskněte mezerník.
    KeyboardComponent instructionsKey
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ior-design.xlsx
    random seed = 0
    loopType = random
    nReps = 1
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    conditions:
      [{u'target_side': u'left', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'right', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'central', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'none', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'left', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'right', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'central', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'none', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'left', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 350, u'cue_side': u'right'}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
    Routine trial
  LoopTerminator trials
  Routine blockStart
  LoopInitiator block0 loopType="TrialHandler"
    conditionsFile = ior-design.xlsx
    loopType = random
    nReps = 10
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    conditions:
      [{u'target_side': u'left', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 50, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'right', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'central', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'none', u'target_time': 50, u'cue_side': u'right'},
      {u'target_side': u'left', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 200, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'right', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'central', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'none', u'target_time': 200, u'cue_side': u'right'},
      {u'target_side': u'left', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'right', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'central', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'none', u'target_time': 350, u'cue_side': u'left'},
      {u'target_side': u'left', u'target_time': 350, u'cue_side': u'right'}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
    Routine trial
  LoopTerminator block0
  Routine block1Start
  LoopInitiator block1 loopType="TrialHandler"
    conditionsFile = ior-design.xlsx
    loopType = random
    nReps = 10
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    conditions:
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    Routine trial
  LoopTerminator block1
  Routine experimentEnd
